CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:orig
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['proSPC (green)', 'DAPI (blue)', '', 'Use RGB for RGB tiffs. Use Channels for LIF (channel order might change)']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
    Select the input image:orig
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:No
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    Convert green to gray?:Yes
    Name the output image:proSPC
    Convert blue to gray?:Yes
    Name the output image:DAPI
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
IdentifyPrimaryObjects:[module_num:6|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notes:['Lower bound on threshold is necessary to avoid artifact from image edge, and to keep border close to nuclei. Also smaller size of smoothing filter.']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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,18
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:5
    Suppress local maxima that are closer than this minimum allowed distance:7.0
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.011,1.0
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    Log transform before thresholding?:No
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
ExpandOrShrinkObjects:[module_num:7|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notes:['Increase nuclei size to help with detecting overlap with cytoplasmic markers']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
    Select the input objects:Nuclei
    Name the output objects:ExpandedNuclei
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:2
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
IdentifyPrimaryObjects:[module_num:8|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notes:['Identify proSPC positive staining']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
    Select the input image:proSPC
    Name the primary objects to be identified:proSPC_areas
    Typical diameter of objects, in pixel units (Min,Max):10,18
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:7.0
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.5
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.25,1.0
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    Log transform before thresholding?:No
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
MaskObjects:[module_num:9|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
    Select objects to be masked:ExpandedNuclei
    Name the masked objects:proSPC_Nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:proSPC_areas
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.08
    Numbering of resulting objects:Renumber
    Invert the mask?:No

ExportToSpreadsheet:[module_num:10|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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
RescaleIntensity:[module_num:11|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enabled:False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
    Select the input image:RAGE_1
    Name the output image:RescaleRAGE
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Maximum of all images
    Lower intensity limit for the input image:0.0
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
RescaleIntensity:[module_num:12|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enabled:False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
    Select the input image:proSPC_2
    Name the output image:RescaleSPC
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Maximum of all images
    Lower intensity limit for the input image:0.0
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
RescaleIntensity:[module_num:13|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enabled:False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
    Select the input image:HT1_56_3
    Name the output image:RescaleHT
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Maximum of all images
    Lower intensity limit for the input image:0.0
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
RescaleIntensity:[module_num:14|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enabled:False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
    Select the input image:DAPI_4
    Name the output image:RescaleDAPI
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Maximum of all images
    Lower intensity limit for the input image:0.0
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
GrayToColor:[module_num:15|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enabled:False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
    Select a color scheme:Stack
    Rescale intensity:Yes
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    Name the output image:ColorImage
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    Hidden:4
    Image name:RescaleRAGE
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    Image name:RescaleSPC
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    Image name:RescaleHT
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    Image name:RescaleDAPI
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
OverlayOutlines:[module_num:16|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notes:['Image of nuclei and proSPC cells']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:orig
    Name the output image:Overlay_proSPC
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#FFFF0A
    Select objects to display:proSPC_Nuclei
    Select outline color:#FFFFFF
    Select objects to display:Nuclei

SaveImages:[module_num:17|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notes:['Save the overlay of nuclei and proSPC cells']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
    Select the type of image to save:Image
    Select the image to save:Overlay_proSPC
    Select method for constructing file names:From image filename
    Select image name for file prefix:orig
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_proSPC
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
